---
API: 2.1
OpenSesame: 3.3.11
Platform: nt
---
set width 1366
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment1
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/AlexPM/Documents/University/Proyecto de Grado/DISEÑO Y DESARROLLO/GUI and Data Processing/BCI - OpenSesame"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical experiment.
	It consists of a practice phase, followed by an experimental phase. For more
	information, please visit <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you gest started!"

define sketchpad brz
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="UK_img.jpg" scale=0.12 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="VEN_img.jpg" scale=0.23 show_if=always x=352 y=0 z_index=0
	draw image center=1 file="BRZ_img.jpg" scale=0.18 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="COL_img.jpg" scale=0.2 show_if=always x=-352 y=0 z_index=0
	draw image center=1 file="USA_img.jpg" scale=0.15 show_if=always x=352 y=224 z_index=0
	draw image center=1 file="FIN_img.jpg" scale=0.19 show_if=always x=-352 y=224 z_index=0
	draw image center=1 file="ITA_img.jpg" scale=0.15 show_if=always x=-352 y=-224 z_index=0
	draw image center=1 file="IND_img.jpg" scale=0.15 show_if=always x=352 y=-224 z_index=0
	draw rect color="#ff0000" fill=0 h=128 penwidth=7 show_if=always w=192 x=-96 y=160 z_index=0
	draw image center=1 file="Center_Flags.jpg" scale=0.43 show_if=always x=0 y=0 z_index=0

define sketchpad col
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="UK_img.jpg" scale=0.12 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="VEN_img.jpg" scale=0.23 show_if=always x=352 y=0 z_index=0
	draw image center=1 file="BRZ_img.jpg" scale=0.18 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="COL_img.jpg" scale=0.2 show_if=always x=-352 y=0 z_index=0
	draw image center=1 file="USA_img.jpg" scale=0.15 show_if=always x=352 y=224 z_index=0
	draw image center=1 file="FIN_img.jpg" scale=0.19 show_if=always x=-352 y=224 z_index=0
	draw image center=1 file="ITA_img.jpg" scale=0.15 show_if=always x=-352 y=-224 z_index=0
	draw image center=1 file="IND_img.jpg" scale=0.15 show_if=always x=352 y=-224 z_index=0
	draw rect color="#ff0000" fill=0 h=128 penwidth=7 show_if=always w=192 x=-448 y=-64 z_index=0
	draw image center=1 file="Center_Flags.jpg" scale=0.43 show_if=always x=0 y=0 z_index=0

define advanced_delay delay_5s
	set jitter_mode Uniform
	set jitter 0
	set duration 5000
	set description "Waits for a specified duration"

define sketchpad end_of_experiment
	set start_response_interval no
	set duration 2000
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Thanks! See you soon!" x=0 y=0 z_index=0

define sequence experiment1
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run about_this_template always
	run instructions always
	run delay_5s always
	run experimental_loop always
	run flags_1 always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 4
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 9
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 flag_displayed ven
	setcycle 1 flag_displayed jpn
	setcycle 2 flag_displayed uk
	setcycle 3 flag_displayed brz
	setcycle 4 flag_displayed usa
	setcycle 5 flag_displayed ind
	setcycle 6 flag_displayed fin
	setcycle 7 flag_displayed col
	setcycle 8 flag_displayed ita
	run show_flag

define sketchpad fin
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="UK_img.jpg" scale=0.12 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="VEN_img.jpg" scale=0.23 show_if=always x=352 y=0 z_index=0
	draw image center=1 file="BRZ_img.jpg" scale=0.18 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="COL_img.jpg" scale=0.2 show_if=always x=-352 y=0 z_index=0
	draw image center=1 file="USA_img.jpg" scale=0.15 show_if=always x=352 y=224 z_index=0
	draw image center=1 file="FIN_img.jpg" scale=0.19 show_if=always x=-352 y=224 z_index=0
	draw image center=1 file="ITA_img.jpg" scale=0.15 show_if=always x=-352 y=-224 z_index=0
	draw image center=1 file="IND_img.jpg" scale=0.15 show_if=always x=352 y=-224 z_index=0
	draw rect color="#ff0000" fill=0 h=128 penwidth=7 show_if=always w=192 x=-448 y=160 z_index=0
	draw image center=1 file="Center_Flags.jpg" scale=0.43 show_if=always x=0 y=0 z_index=0

define sequence flags_1
	set flush_keyboard yes
	set description "A single trial"
	run printing_time always
	run ven always
	run jpn always
	run col always
	run usa always
	run brz always
	run fin always
	run ind always
	run uk always
	run ita always

define sketchpad ind
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="UK_img.jpg" scale=0.12 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="VEN_img.jpg" scale=0.23 show_if=always x=352 y=0 z_index=0
	draw image center=1 file="BRZ_img.jpg" scale=0.18 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="COL_img.jpg" scale=0.2 show_if=always x=-352 y=0 z_index=0
	draw image center=1 file="USA_img.jpg" scale=0.15 show_if=always x=352 y=224 z_index=0
	draw image center=1 file="FIN_img.jpg" scale=0.19 show_if=always x=-352 y=224 z_index=0
	draw image center=1 file="ITA_img.jpg" scale=0.15 show_if=always x=-352 y=-224 z_index=0
	draw image center=1 file="IND_img.jpg" scale=0.15 show_if=always x=352 y=-224 z_index=0
	draw rect color="#ff0000" fill=0 h=128 penwidth=7 show_if=always w=192 x=256 y=-288 z_index=0
	draw image center=1 file="Center_Flags.jpg" scale=0.43 show_if=always x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration 500
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=always text="P300 - TEST 1: PICK YOUR FAVORITE FLAG!" x=0 y=0 z_index=0

define sketchpad ita
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
define sketchpad jpn
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="UK_img.jpg" scale=0.12 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="VEN_img.jpg" scale=0.23 show_if=always x=352 y=0 z_index=0
	draw image center=1 file="BRZ_img.jpg" scale=0.18 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="COL_img.jpg" scale=0.2 show_if=always x=-352 y=0 z_index=0
	draw image center=1 file="USA_img.jpg" scale=0.15 show_if=always x=352 y=224 z_index=0
	draw image center=1 file="FIN_img.jpg" scale=0.19 show_if=always x=-352 y=224 z_index=0
	draw image center=1 file="ITA_img.jpg" scale=0.15 show_if=always x=-352 y=-224 z_index=0
	draw image center=1 file="IND_img.jpg" scale=0.15 show_if=always x=352 y=-224 z_index=0
	draw image center=1 file="Center_Flags.jpg" scale=0.43 show_if=always x=0 y=0 z_index=0

define inline_script printing_time
	set description "Executes Python code"
	___run__
	import datetime as dt
	
	
	t = dt.datetime.now()
	
	current_time = t.strftime('%H:%M:%S.%f')
	
	log.write(u'end time = %s \n' % current_time)
	__end__
	set _prepare ""

define inline_script show_flag
	set description "Executes Python code"
	___run__
	import random
	
	#List to choose
	list1 = [1, 2, 3, 4, 5, 6, 7, 8, 9]
	
	timetowait = 1000
	
	
	k = random.choice(list1)
	
	if k==1:
	    ven_canvas.show()
	    log.write(u'ven\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	    
	if k==2:
	    jpn_canvas.show()
	    log.write(u'jpn\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	
	if k==3:
	    col_canvas.show()
	    log.write(u'col\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	
	if k==4:
	    usa_canvas.show()
	    log.write(u'usa\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	
	if k==5:
	    uk_canvas.show()
	    log.write(u'uk\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	
	if k==6:
	    ind_canvas.show()
	    log.write(u'ind\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	
	if k==7:
	    ita_canvas.show()
	    log.write(u'ita\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	    
	if k==8:
	    fin_canvas.show()
	    log.write(u'fin\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	    
	if k==9:
	    brz_canvas.show()
	    log.write(u'brz\n')
	    log.write(u'time = %s \n' % clock.time())
	    clock.sleep(timetowait)
	    
	#--------------------------------------- 
	#Write data to log file
	#log.write_vars()
	__end__
	___prepare__
	#Create VENEZUELA canvas
	ven_canvas = items['ven'].canvas
	
	#Create JAPAN canvas
	jpn_canvas = items['jpn'].canvas
	
	#Create COLOMBIA canvas
	col_canvas = items['col'].canvas
	
	#Create USA canvas
	usa_canvas = items['usa'].canvas
	
	#Create UK canvas
	uk_canvas = items['uk'].canvas
	
	#Create INDIA canvas
	ind_canvas = items['ind'].canvas
	
	#Create ITALY canvas
	ita_canvas = items['ita'].canvas
	
	#Create FINLAND canvas
	fin_canvas = items['fin'].canvas
	
	#Create BRAZIL canvas
	brz_canvas = items['brz'].canvas
	
	
	#Lists
	flags = []
	times = []
	__end__

define sketchpad uk
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
define sketchpad usa
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
define sketchpad ven
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="UK_img.jpg" scale=0.12 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="VEN_img.jpg" scale=0.23 show_if=always x=352 y=0 z_index=0
	draw image center=1 file="BRZ_img.jpg" scale=0.18 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="COL_img.jpg" scale=0.2 show_if=always x=-352 y=0 z_index=0
	draw image center=1 file="USA_img.jpg" scale=0.15 show_if=always x=352 y=224 z_index=0
	draw image center=1 file="FIN_img.jpg" scale=0.19 show_if=always x=-352 y=224 z_index=0
	draw image center=1 file="ITA_img.jpg" scale=0.15 show_if=always x=-352 y=-224 z_index=0
	draw image center=1 file="IND_img.jpg" scale=0.15 show_if=always x=352 y=-224 z_index=0
	draw rect color="#ff0000" fill=0 h=128 penwidth=7 show_if=always w=192 x=256 y=-64 z_index=0
	draw image center=1 file="Center_Flags.jpg" scale=0.43 show_if=always x=0 y=0 z_index=0

